PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2
  Window size (pixels) = [1024, 640]
  color = $[1,1,1]
  expName = FST_clear
  logging level = debug
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Routines
  Routine welcome_screen
    TextComponent text_welcome
      color = black
      letterHeight = 0.05
      pos = (0, .09)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in our experiment! Please make sure you are wearing headphones and are in a quiet, distraction-free place.

        In this experiment, you will listen to some sentences that will sound like they are spoken in a noisy room. You will be asked a question about each sentence.
    TextComponent text_welcome2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2
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      text:
        Press the space bar to listen to an example of a sentence.
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = first key
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  Routine tutorial_instr
    TextComponent text_inst3
      color = black
      letterHeight = 0.05
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst3
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    TextComponent text_inst_cont2
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      saveStartStop = False
      startVal [time (s)] = 3
      text = Press the space bar to continue.
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    KeyboardComponent key_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
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  Routine practice_instr
    TextComponent text_prac1
      color = black
      letterHeight = 0.04
      pos = (0, .12)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's practice. For the rest of the experiment, please stop adjusting the volume on your computer.

        Press the RIGHT ARROW key if the gender of the person performing the action is MALE.

        Press the LEFT ARROW key if the gender of the person performing the action is FEMALE.

        You have 5 seconds to respond each trial.
        During the practice, you will be told if you were right or wrong.
    TextComponent text_prac2
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press the space bar to begin!
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    KeyboardComponent key_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5
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  Routine tutorial_stim
    SoundComponent tuto_sent
      saveStartStop = False
      sound [set every repeat] = $sent_stim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent text_inst1
      color = Black
      letterHeight = 0.05
      pos = (0, .15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $inst1
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    TextComponent text_inst2
      color = black
      letterHeight = 0.05
      pos = (0, -.05)
      saveStartStop = False
      startVal [time (s)] = 5
      text [set every repeat] = $inst2
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    TextComponent text_inst_cont1
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 8
      text = Press the space bar to continue.
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    KeyboardComponent key_tuto
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 8
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  Routine main_instr
    TextComponent text_main1
      color = black
      letterHeight = 0.04
      pos = (0, .12)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now let's move onto the real experiment. Please stop adjusting the volume of your headphones!

        Press the LEFT ARROW key if the gender of the people performing the action is FEMALE.

        Press the RIGHT ARROW key if the gender of the people performing the action is MALE.

        You have 5 seconds to respond each trial.
        You will not be told if you are right or wrong after each sentence.
    TextComponent text_main2
      color = black
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 5
      text = Press the space bar to begin!
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    KeyboardComponent key_main
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine stim_resp
    CodeComponent msg_init
      Code Type = Auto->JS
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      Begin Experiment:
        msg='doh!'#if this comes up we forgot to update the msg!
        trial_count=0
    SoundComponent stim_present
      saveStartStop = False
      sound [set every repeat] = $sent_stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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    TextComponent text_qf
      color = black
      letterHeight = 0.07
      pos = (-.29, 0)
      saveStartStop = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
      text = FEMALE <
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    TextComponent text_qm
      color = black
      letterHeight = 0.07
      pos = (.25, 0)
      saveStartStop = False
      startVal [time (s)] = 4.5
      stopVal [duration (s)] = 5
      text = > MALE
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    PolygonComponent fixation
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      saveStartStop = False
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9.5
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $target
      forceEndRoutine = True
      startVal [time (s)] = .5
      stopVal [duration (s)] = 9
      storeCorrect = True
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    CodeComponent msg_fb
      Code Type = Auto->JS
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      End Routine:
        if not key_resp.keys:
            msg="Failed to respond"
        elif key_resp.corr:#stored on last run routine
            msg="Correct!"
        else:
            msg="Oops! That was wrong"

        trial_count=trial_count+1
        msg_t = "[" + str(trial_count-16) + "/64]\nCompleted"
  Routine main_feedback
    TextComponent text_feedback_2
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_t
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    TextComponent text_exp_cont_2
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 1
      text = Press the space bar to continue.
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    KeyboardComponent key_exp_cont_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine prac_feedback
    TextComponent text_feedback
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    TextComponent text_exp_cont
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 1
      text = Press the space bar to continue.
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    KeyboardComponent key_exp_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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Flow
  Routine welcome_screen
  LoopInitiator tutorial_trials loopType="TrialHandler"
    conditionsFile = Instruction.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('inst1', '"Nephews that embrace nieces are suave"'), ('inst2', "You'll listen to these sorts of sentences."), ('inst3', 'Listen carefully to each sentence and\npay attention to *who* is performing the action.'), ('sent_stim', 'sent_stim/094_SM.wav')]),
      OrderedDict([('inst1', '"Men that protect women are awesome."\nWho are performing the action?'), ('inst2', 'Since the MEN are doing the protecting,\nthe answer is MEN.'), ('inst3', 'Again, pay attention to *who* is performing the action.'), ('sent_stim', 'sent_stim/141_SM.wav')]),
      OrderedDict([('inst1', '"Women that protect men are awesome."\nWho are performing the action?'), ('inst2', 'Since the WOMEN are doing the protecting,\nthe answer is WOMEN.'), ('inst3', 'In this test, you need to identify the\n*GENDER* of the people performing the action.'), ('sent_stim', 'sent_stim/141_SF.wav')]),
      OrderedDict([('inst1', '"Kings that queens assist are helpful."\nWhat is the gender of people performing the action?'), ('inst2', 'Since QUEENS are doing the assisting,\nthe answer is FEMALE.'), ('inst3', 'Pay attention to which *GENDER* is performing the action.'), ('sent_stim', 'sent_stim/104_OF.wav')])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
    Routine tutorial_stim
    Routine tutorial_instr
  LoopTerminator tutorial_trials
  Routine practice_instr
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sent_stim', 'sent_stim/012_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/012_SM.wav'), ('target', 'left'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/023_OF.wav'), ('target', 'right'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/023_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/025_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/025_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/042_OF.wav'), ('target', 'right'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/042_SM.wav'), ('target', 'left'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/063_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/063_SM.wav'), ('target', 'left'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/076_SM.wav'), ('target', 'left'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/076_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/110_OF.wav'), ('target', 'right'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/110_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/127_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/127_OF.wav'), ('target', 'right'), ('syntax', 'O')])]
    Routine stim_resp
    Routine prac_feedback
  LoopTerminator practice_trials
  Routine main_instr
  LoopInitiator main_trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sent_stim', 'sent_stim/001_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/002_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/003_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/004_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/005_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/013_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/014_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/015_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/016_SM.wav'), ('target', 'left'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/024_OM.wav'), ('target', 'left'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/026_OF.wav'), ('target', 'right'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/027_OF.wav'), ('target', 'right'), ('syntax', 'O')]),
      OrderedDict([('sent_stim', 'sent_stim/028_SM.wav'), ('target', 'left'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/029_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/030_SF.wav'), ('target', 'right'), ('syntax', 'S')]),
      OrderedDict([('sent_stim', 'sent_stim/041_OM.wav'), ('target', 'left'), ('syntax', 'O')])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
    Routine stim_resp
    Routine main_feedback
  LoopTerminator main_trials
